PsychoPy2experiment version="2021.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = Ravens Progressive Matrices
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $image_file
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = ['1','2','3','4','5','6','7','8']
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
        wrongAnswer = 0
      End Routine:
        if key_resp.corr == 1:
            score = score + 1
            wrongAnswer = 0
        else:
            wrongAnswer +=1
        if wrongAnswer == 3:
            trials.finished = True

            thisExp.addData('totalScore', score)
  Routine instr
    TextComponent instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        During this task, you will see designs with a part left out.

        Decide which of the pieces below will complete the design.

        Press the number key for your choice.
    TextComponent cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to begin.
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    KeyboardComponent instr_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
  Routine done
    TextComponent done_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have completed this task.
    KeyboardComponent key_resp_2
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent end_text
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = RPM_items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('image_file', '1.jpg'), ('correct', 4)]),
      OrderedDict([('index', 1), ('image_file', '2.jpg'), ('correct', 5)]),
      OrderedDict([('index', 2), ('image_file', '3.jpg'), ('correct', 1)]),
      OrderedDict([('index', 3), ('image_file', '4.jpg'), ('correct', 2)]),
      OrderedDict([('index', 4), ('image_file', '5.jpg'), ('correct', 6)]),
      OrderedDict([('index', 5), ('image_file', '6.jpg'), ('correct', 3)]),
      OrderedDict([('index', 6), ('image_file', '7.jpg'), ('correct', 6)]),
      OrderedDict([('index', 7), ('image_file', '8.jpg'), ('correct', 2)]),
      OrderedDict([('index', 8), ('image_file', '9.jpg'), ('correct', 1)]),
      OrderedDict([('index', 9), ('image_file', '10.jpg'), ('correct', 3)]),
      OrderedDict([('index', 10), ('image_file', '11.jpg'), ('correct', 5)]),
      OrderedDict([('index', 11), ('image_file', '12.jpg'), ('correct', 4)]),
      OrderedDict([('index', 12), ('image_file', '13.jpg'), ('correct', 2)]),
      OrderedDict([('index', 13), ('image_file', '14.jpg'), ('correct', 6)]),
      OrderedDict([('index', 14), ('image_file', '15.jpg'), ('correct', 1)]),
      OrderedDict([('index', 15), ('image_file', '16.jpg'), ('correct', 2)]),
      OrderedDict([('index', 16), ('image_file', '17.jpg'), ('correct', 1)]),
      OrderedDict([('index', 17), ('image_file', '18.jpg'), ('correct', 3)]),
      OrderedDict([('index', 18), ('image_file', '19.jpg'), ('correct', 5)]),
      OrderedDict([('index', 19), ('image_file', '20.jpg'), ('correct', 6)]),
      OrderedDict([('index', 20), ('image_file', '21.jpg'), ('correct', 4)])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
    Routine trial
  LoopTerminator trials
  Routine done
